CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain "overlay")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does containregexp "ch01")
    Name to assign these images:EpCAM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "ch00")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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notes:['Accurate segmentation of nucleus objects is crucial for subsequent steps and is highly dependent on the effectiveness of the staining process. Substracting EpCAM signals from the DAPI channel aids in the segmentation of IEC and reduced the EpCAM signal that is mistakenely present in the lamina propria. This signal can be filtered out more easily in the later treshold settings additionally. ']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
    Select the input image:DAPI
    Name the output image:CorrBlue
    Select the illumination function:EpCAM
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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notes:['Since potential immune cells and epithelial cells differ in size and morphology, it was necessary to seperate them into 2 different pipelines (LaminaCellProfiler and EpitheliaCellProfiler). Therefore, during segmentation of immune cell nuclei, objects in the intestinal area were not considered as the differences, as mentioned previolusy, were too significant. Objects inside the intestinal region are filtered out in the subsequent steps anyway. ', '', 'Over- or under segmentation is common, particuarly in complex tissues. To minimize this, it is recommended to acquire high-quality images. However, it should be noted that approx. 10% error rate per image can be expected. ']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:IdentifyNucleiObjects
    Typical diameter of objects, in pixel units (Min,Max):5,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Here, we define the intestinal region as an object based on the green (EpCAM) channel. ']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
    Select the input image:EpCAM
    Name the primary objects to be identified:IdentifyIntestine
    Typical diameter of objects, in pixel units (Min,Max):50,900
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:8|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notes:['Sometimes cells close to intestinal crypts overlap within EpCAM staining. By shrinking or expanding the EpCAM objects by few pixels, these cells can be kept or removed']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
    Select the input objects:IdentifyIntestine
    Name the output objects:ShrunkenIntestine
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:9|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notes:['In this module, all DAPI-identified objects that can be found within the EpCAM-stained Mask are removed. ']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
    Select objects to be masked:IdentifyNucleiObjects
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenIntestine
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:10|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notes:['Size and nuclei form is measured in this step to filter out excessive cells (due to oversegmentation) and potentially myofibroblasts.']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
    Select object sets to measure:MaskedNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:11|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notes:['Myofibroblasts are contractile cells with a central role in the remodeling and the restoration of damaged gastrointestinal tissue. These subepithelial intestinal fibroblasts are present within the lamina propria and often surround the crypt epithelium. Immunologic makers exist to aid in the identification of these cellls, but none is absolutely specific. However, using "MeasureObjectSizeShape" myofibroblasts within the lamina propria can be filtered and seperataed from immune cells due to their characteristic shape and an eccentricity value over 0.9 if not sufficient seperated alreay in the previos masking step. ', 'Also, by filtering cells by their maximal area, we filtered out obvious oversegmented cells (two or three cells that were recognized as one). ']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
    Select the objects to filter:MaskedNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:FilteredCells
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.97
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1600
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
IdentifySecondaryObjects:[module_num:12|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notes:['Here, cells outer edges are identified. In this study, no additional cell marker was used for immune cells, therefore, the Distance-N method was used to assign an outer edge, based on pixels that expand from the nucleus objects. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifyCellObjects
    Select the method to identify the secondary objects:Distance - N
    Select the input image:CorrBlue
    Number of pixels by which to expand the primary objects:7
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:13|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notes:['Enhancing features such as speckles can increase the contrast between the objects of interest and the backgroud, making it easier to distinguish specific features within the image. Also, algorithms can detect more accurately, segment, and classify objects. ']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
    Select the input image:G3BP1
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Here, we identify G3BP1 granules in the red (G3BP1) channel as object to related them in the next steps.']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifySpotObjects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.04,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:15|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notes:['Here, we relate previous identifiy G3BP1 spots with cells, cytoplasm or nucleus (in seperate steps) to compare intensity, respectively. ', '', 'Note: The output later is extensive, so take the time to labbel objects appropriate, to retrieve desired measurements. ']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
    Parent objects:IdentifyCellObjects
    Child objects:IdentifySpotObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateG3BP1ToCellObjects
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
FilterObjects:[module_num:16|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notes:['To compare distribution on how many cells are positive or negative for G3BP1 staining, previous identified cell objects were filtered for G3BP1.']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
    Select the objects to filter:IdentifyCellObjects
    Name the output objects:G3BP1negativeCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:G3BP1positive
    Select the measurement to filter by:Children_IdentifySpotObjects_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
OverlayOutlines:[module_num:17|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notes:['This module gives an overview on all identified objects and their relationsship.', 'Optional: This image can then be saved using the SaveImage module. ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00CACA
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:RelateG3BP1ToCellObjects
    Select outline color:white
    Select objects to display:G3BP1negativeCells
    Select outline color:#CA0065
    Select objects to display:G3BP1positive

MeasureObjectIntensity:[module_num:18|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notes:['Here we used MeasureOjectIntensity to measure pixel intensity of G3BP1 in G3BP1+ positive cells of healthy control and non-IBD']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
    Select images to measure:G3BP1
    Select objects to measure:G3BP1positive, IdentifyCellObjects, IdentifySpotObjects

MeasureObjectSizeShape:[module_num:19|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notes:['This module was used, to compare G3BP1 spot size and nuclei morphology between healthy control and ulcerative colitis patients in remission. ']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
    Select object sets to measure:IdentifySpotObjects, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:20|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notes:['Here, data are selected for export. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Submit\\Paper_supplementary\\PropiCellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|Run_Timestamp,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:PropiCellProfiler_Output
    Overwrite existing files without warning?:Yes
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